PsychoPy2experiment version="2021.2.3"
Settings
  Data filename = u'data/%s_%s_%s_%s' % (expInfo['participant'], expInfo['School'], expName, expInfo['date'])
  Experiment info = {'participant': '', 'School': '', 'Number of trials': "['N2 - 5 trials', 'K1 and K2 - 8 trials']", 'Audio': "['Yes', 'No']", 'Debug': "['No', 'Yes']"}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['resources/aud/8 boxes Slide 3_Trimmed.m4a', 'resources/aud/8 boxes End of Game.m4a', 'resources/aud/8 boxes Slide 1.m4a', 'resources/aud/8 boxes Slide 2.m4a', 'resources/aud/8 boxes Slide 3.m4a', 'resources/aud/8 boxes Slide 4.m4a', 'resources/aud/8 boxes Trials 1-8 Recall.m4a', 'resources/imgs/apple.png', 'resources/imgs/banana.png', 'resources/imgs/box.png', 'resources/imgs/cherries.png', 'resources/imgs/continue.png', 'resources/imgs/empty-box.png', 'resources/imgs/grapes.png', 'resources/imgs/orange.png', 'resources/imgs/pineapple.png', 'resources/imgs/strawberry.png', 'resources/imgs/watermelon.png', 'resources/seqs/conditions_v3.csv']
  Screen = 1
  Units = height
  Window size (pixels) = [1470, 956]
  expName = eightBoxes_v3
  keyboardBackend = ioHub
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Routines
  Routine part1
    CodeComponent part1_code
      Code Type = Auto->JS
      disabled = True
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      Begin Routine:
        # *** THIS ROUTINE HAS NOT BEEN MAINTAINED ***

        # Part 1 is where the objects are revealed for a
        # while, then hidden, and the subject has to
        # recall where. This will be skipped for now,
        # but one thing still needs to be done here:
        # moving the object to the space above the boxes.
        # If Part 1 is becomes completely unnecessary,
        # the relevant logic can be copied over to
        # Part 2, then Part 1 can be deleted.

        #found_fruits = []

        if SKIP_PART_1:
            continueRoutine = False
        #else:
        #    for obj in objs:
        #        if obj is not None:
        #            found_fruits.append(obj)

        OBJ_DURATION = 1.0  # Seconds
        BLANK_DURATION = OBJ_DURATION

        # Initialize some containers
        visible = []
        visible_t = []
        n_omissions = []
        n_commissions = []
        for i in range(N_BOXES):
            visible.append(False)
            visible_t.append(None)
            n_omissions.append(0)
            n_commissions.append(0)

        correct_boxes = []
        for i in range(n_fruits):
            correct_boxes.append(f"box{idxs[i] + 1}")
            correct_choices[idxs[i]] = fruit_basket[i].name
        correct_boxes.sort()

        # Fill the rest with blanks
        for i in range(N_BOXES):
            if objs[i] is None:
                objs[i] = visual.ImageStim(
                    win=win,
                    name=f"blank{i + 1}",
                    image="resources/imgs/empty-box.png",
                    pos=BOXES_XY[i],
                    size=OBJ_SIZE
                )

        # Other collections
        clicked_boxes = []
        click_times = []

        # Flags
        first_click = True
        update_time_elapsed = False

        # Variables
        obj_count = 0
        task_time_start = None
        task_time_elapsed = 0.0

        highlighter = visual.ImageStim(
            win=win,
            name="highlighter",
            image="resources/imgs/box.png",
            pos=BOXES_XY[0],
            size=BOX_SIZE,
            opacity=0.5
        )
      Each Frame:
        if not SKIP_PART_1:
            if update_time_elapsed:
                task_time_elapsed = t - task_time_start

            highlighter.setSize((0, 0), log=False)
            for i in range(N_BOXES):
                # Skip those currently visible
                if visible[i]:
                    continue
                if MOUSE.isPressedIn(boxes[i]):
                    # Start timer on first click
                    if first_click:
                        task_time_start = t
                        update_time_elapsed = True
                        first_click = False
                    # Determine category of selection
                    if "blank" not in objs[i].name:
                        obj_count += 1
                        if obj_count >= n_fruits:
                            update_time_elapsed = False
                    elif "_blank" in objs[i].name:
                        n_commissions[i] += 1
                    else:
                        n_omissions[i] += 1
                    # Record selection
                    clicked_boxes.append(boxes[i].name)
                    click_times.append(task_time_elapsed)
                    # Make selection visible
                    objs[i].setAutoDraw(True, log=False)
                    visible[i] = True
                    visible_t[i] = t
                    break
                # On-mouseover effect
                elif boxes[i].contains(MOUSE):
                    highlighter.setPos(boxes[i].pos, log=False)
                    highlighter.setSize(BOX_SIZE, log=False)
                    highlighter.draw()
                    break

            for i in range(N_BOXES):
                # Determine when to stop showing picture
                if visible[i] and t - visible_t[i] >= OBJ_DURATION:
                    objs[i].setAutoDraw(False, log=False)
                    if "blank" not in objs[i].name:
                        found_fruits.append(objs[i])
                        # Replace picture with blank
                        objs[i] = visual.ImageStim(
                            win=win,
                            name=f"{objs[i].name}_blank",
                            image="imgs/empty-box.png",
                            pos=BOXES_XY[i],
                            size=OBJ_SIZE
                        )
                    visible[i] = False

            # Determine if the trial is completed
            if obj_count >= n_fruits and sum(visible) <= 0:
                # Immediately proceed to Part 2
                continueRoutine = False
      End Routine:
        if not SKIP_PART_1:
            fruit_pos = ABOVE_BOXES_XY
            found_count = 0

            # UPDATE: The order needs to be shuffled
            shuffle(found_fruits)
            for found_fruit in found_fruits:
                found_fruit.pos = fruit_pos[found_count]
                found_fruit.autoDraw = True
                found_count += 1

            thisExp.addData("clicked_boxes", clicked_boxes)
            thisExp.addData("click_times", click_times)
            thisExp.addData("time_taken_sec", click_times.pop())
            thisExp.addData("correct_boxes", correct_boxes)

            thisExp.addData("omission_errors", n_omissions)
            thisExp.addData("commission_errors", n_commissions)

            total_errors = sum(n_omissions) + sum(n_commissions)

            thisExp.addData("total_errors", total_errors)

            highlighter.size = (0, 0)
    TextComponent part1_title
      disabled = True
      letterHeight = 0.05
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Find the fruits
      units = height
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  Routine part2
    CodeComponent part2_code
      Code Type = Auto->JS
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      Begin Routine:
        DRAGGING = False
        clicked_obj = None
        clicked_obj_name = "_"

        fruits_left = n_fruits

        first_click = True
        first_click_time = 0

        fruit_idx = None
        orig_pos = []
        for found_fruit in found_fruits:
            orig_pos.append(found_fruit.pos)

        choices = []
        for i in range(N_BOXES):
            choices.append(None)

        # Mouse tracking
        x = 0
        y = 0
        coords_x = []
        coords_y = []
        coords_t = []
        coords_objname = []

        NEXT.opacity = 0.1
        NEXT.autoDraw = True

        if USE_AUDIO and trial_name == "Practice trial":
            aud_file = f"{AUD_DIR}/8 boxes Slide 4.m4a"
            SOUND = make_sound("slide4", aud_file)
            SOUND_DUR = SOUND.getDuration()
            SOUND.play()
      Each Frame:
        if fruits_left > 0:
            time_since_start = t
            time_since_first_click = 0 if first_click else t - first_click_time

        MOUSE_L = MOUSE.getPressed()[0]

        if MOUSE_L_prev != MOUSE_L:
            MOUSE_L_prev = MOUSE_L
            if MOUSE_L and fruits_left < 1 and NEXT.contains(MOUSE):
                continueRoutine = False

        if not DRAGGING:
            for i in range(len(found_fruits)):
                if MOUSE.isPressedIn(found_fruits[i]):
                    if first_click:
                        first_click_time = t
                        first_click = False
                    clicked_obj = found_fruits[i]
                    clicked_obj_name = clicked_obj.name
                    fruit_idx = i
                    for j in range(N_BOXES):
                        if choices[j] == clicked_obj.name:
                            choices[j] = None
                            fruits_left += 1
                            if fruits_left > 0:
                                NEXT.opacity = 0.1
                            break
                    DRAGGING = True

        if MOUSE_L:
            if DRAGGING:
                clicked_obj.pos = MOUSE.getPos()
                # Mouse tracking
                x, y = clicked_obj.pos
                if len(coords_x) == 0 or dist_sq(coords_x[-1], coords_y[-1], x, y) > MIN_DIST_SQ:
                    coords_x.append(round_dp(x))
                    coords_y.append(round_dp(y))
                    coords_t.append(round_dp(t))
                    coords_objname.append(clicked_obj_name)
        else:
            DRAGGING = False
            if clicked_obj is not None:
                for i in range(N_BOXES):
                    if snapped(clicked_obj, boxes[i]):
                        if choices[i] is None:
                            choices[i] = clicked_obj.name
                            fruits_left -= 1
                            if fruits_left < 1:
                                NEXT.opacity = 1
                        else:
                            clicked_obj.pos = orig_pos[fruit_idx]
                        break
                clicked_obj = None
                clicked_obj_name = "_"

        if SHOW_DEBUG:
            part2_text.text = f"""
        time_since_start = {round(time_since_start, 3)}
        time_since_first_click = {round(time_since_first_click, 3)}
        fruits_left = {fruits_left}
        choices = {choices}
        clicked_obj_name = {clicked_obj_name}
        fruit_idx = {fruit_idx}
        SOUND_DUR = {round(SOUND_DUR, 3)}
        t = {round(t, 3)}
        """
      End Routine:
        NEXT.autoDraw = False

        for found_fruit in found_fruits:
            found_fruit.autoDraw = False

        if USE_AUDIO and trial_name == "Practice trial":
            SOUND.stop()

        score = 0
        errors = 0
        for i in range(N_BOXES):
            if choices[i] is None:
                choices[i] = "-"
            if correct_choices[i] is None:
                correct_choices[i] = "-"
            if choices[i] != correct_choices[i]:
                errors += 1
            elif correct_choices[i] != "-":
                score += 1

        thisExp.addData("choices", choices)
        thisExp.addData("correct_choices", correct_choices)

        thisExp.addData("score", score)
        thisExp.addData("errors", errors)

        thisExp.addData("time_since_start", time_since_start)
        thisExp.addData("time_since_first_click", time_since_first_click)

        # Record timestamp and total time
        thisExp.addData("end_timestamp", util.MonotonicClock.getDateStr())
        thisExp.addData("total_seconds", globalClock.getTime())

        # Mouse tracking
        thisExp.addData("coords_x", coords_x)
        thisExp.addData("coords_y", coords_y)
        thisExp.addData("coords_t", coords_t)
        thisExp.addData("coords_objname", coords_objname)
    TextComponent part2_title
      letterHeight = 0.05
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Put the fruits back in their original boxes
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    TextComponent part2_text
      letterHeight = 0.02
      pos = (0.6, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine begin
    CodeComponent begin_code
      Code Type = Auto->JS
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      Begin Experiment:
        expVersion = "2022.09.23"
        AUD_DIR = "resources/aud"
        IMGS_DIR = "resources/imgs"
        SLIDES_DIR = f"{IMGS_DIR}/slides"
        SEQ_FILE = "resources/seqs/conditions_v3.csv"
        MAX_TRIALS = 5
        if expInfo["Number of trials"] == "N2 - 5 trials":
            MAX_TRIALS = 5
        elif expInfo["Number of trials"] == "K1 and K2 - 8 trials":
            MAX_TRIALS = 8
        SHOW_DEBUG = expInfo["Debug"] == "Yes"
        USE_AUDIO = expInfo["Audio"] == "Yes"

        selected_rows = f"0:{MAX_TRIALS + 1}"

        SKIP_PART_1 = True
        RANDOMIZE_FRUITS = True
        RANDOMIZE_POSITIONS = False

        MIN_DIST_SQ = 0.005 * 0.005  # Mouse tracking

        # "Next" button
        NEXT_POS = (0, -0.39)
        #NEXT_SIZE = (0.26, 0.1)
        #NEXT = make_button("continue", "Continue", NEXT_POS, NEXT_SIZE)
        NEXT_SIZE = (0.1 / 104 * 254, 0.1)
        NEXT = make_img("continue", f"{IMGS_DIR}/continue.png", NEXT_POS, NEXT_SIZE)

        # Global mouse
        MOUSE = core.Mouse(win=win)
        MOUSE_L = 0
        MOUSE_L_prev = 0

        # Global sound
        SOUND = None

        IMG_NAMES = (
            "apple",
            "banana",
            "cherries",
            "grapes",
            "orange",
        #    "pineapple",  # very distorted, have to use non-square sizes
            "strawberry",
            "watermelon",
        )

        #N_FRUITS = 7
        N_FRUITS = len(IMG_NAMES)
        N_BOXES = 8
        NCOL = 4

        # Lengths (% screen height) ----------------------

        BOX_SIZE = (0.2, 0.2)
        OBJ_SIZE = (0.16, 0.16)
        CONT_BUTTON_SIZE = (0.32, 0.112)

        ABOVE_BOXES_X0 = -0.4
        ABOVE_BOXES_Y0 = 0.2
        ABOVE_BOXES_XY = []
        for i in range(N_FRUITS):
            ABOVE_BOXES_XY.append((
                ABOVE_BOXES_X0 + i * OBJ_SIZE[1],
                ABOVE_BOXES_Y0
            ))

        BOXES_X0 = -0.3
        BOXES_Y0 = 0
        BOXES_XY = []
        for i in range(N_BOXES):
            BOXES_XY.append((
                BOXES_X0 + (i % NCOL) * BOX_SIZE[0],
                BOXES_Y0 - int(i / NCOL) * BOX_SIZE[1]
            ))

        # Boxes ------------------------------------------

        boxes = []
        for i in range(N_BOXES):
            boxes.append(visual.ImageStim(
                win=win,
                name=f"box{i + 1}",
                image="resources/imgs/box.png",
                pos=BOXES_XY[i],
                size=BOX_SIZE,
                opacity=0.5
            ))

        # Objects (fruits) -------------------------------

        fruit_basket = []
        for i in range(N_FRUITS):
            fruit_basket.append(visual.ImageStim(
                win=win,
                name=IMG_NAMES[i],
                image=f"resources/imgs/{IMG_NAMES[i]}.png",
                pos=(0, 0),
                size=OBJ_SIZE
            ))
      Begin Routine:
        for i in range(N_BOXES):
            boxes[i].autoDraw = True

        NEXT.autoDraw = True

        fruit1 = fruit_basket[0]
        fruit1.pos = BOXES_XY[0]
        fruit1.autoDraw = True
        fruit2 = fruit_basket[1]
        fruit2.pos = BOXES_XY[7]
        fruit2.autoDraw = True

        if USE_AUDIO:
            aud_file = f"{AUD_DIR}/8 boxes Slide 1.m4a"
            SOUND = make_sound("slide1", aud_file)
            SOUND_DUR = SOUND.getDuration()
            SOUND.play()
      Each Frame:
        MOUSE_L = MOUSE.getPressed()[0]
        if MOUSE_L_prev != MOUSE_L:
            MOUSE_L_prev = MOUSE_L
            if MOUSE_L and NEXT.contains(MOUSE):
                continueRoutine = False

        if SHOW_DEBUG:
            begin_text.text = f"""
        SOUND_DUR = {round(SOUND_DUR, 3)}
        t = {round(t, 3)}
        selected_rows = {selected_rows}
        """
      End Experiment:
        if USE_AUDIO:
            aud_file = f"{AUD_DIR}/8 boxes End of Game.m4a"
            SOUND = make_sound("end", aud_file)
            SOUND.play()
      End Routine:
        NEXT.autoDraw = False

        if USE_AUDIO:
            SOUND.stop()
    CodeComponent functions_g
      Code Type = Auto->JS
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      Before Experiment:
        def make_button(name, text, pos, size):
            return visual.ButtonStim(
                win=win,
                text=text,
            #    font="Arvo",
                pos=pos,
                letterHeight=0.04,
                size=size,
                borderWidth=0.005,
                fillColor="lightgrey",
                borderColor="darkgrey",
                color="black",
                colorSpace="rgb",
                opacity=None,
                bold=True,
                italic=False,
                padding=None,
                anchor="center",
                name=name
            )

        def make_sound(name, filepath):
            return sound.Sound(
                win=win,
                value=filepath,
                secs=-1,
                stereo=True,
                hamming=True,
                name=name
            )

        def make_img(name, file_name, pos, size, opacity):
            return visual.ImageStim(
                win=win,
                name=name,
                image=file_name,
                pos=pos,
                size=size,
                opacity=opacity
            )

        def within_box(obj, box):
            """
            Determine if object is within box
            - Squared difference in x (and y) coordinates
            should be less than the square of half the
            box width (and height)
            - That would mean the center of the object is
            within the box boundaries
            """
            obj_x, obj_y = obj.pos
            box_x, box_y = box.pos
            box_w, box_h = box.size
            dx, dy = obj_x - box_x, obj_y - box_y
            hw, hh = box_w / 2, box_h / 2
            return dx * dx < hw * hw and dy * dy < hh * hh

        def snapped(obj1, obj2, func=within_box):
            """
            Determine if obj1 snapped to center of obj2
            - Check if obj1 is 'near' obj2, based on func
            - If yes, set the obj1's position to be
            equal to obj2's position and return True
            - Otherwise, do nothing and return False
            """
            if func(obj1, obj2):
                obj1.pos = obj2.pos
                return True
            return False

        def dist_sq(x1, y1, x2, y2):
            dx, dy = x2 - x1, y2 - y1
            return (dx * dx) + (dy * dy)

        def round_dp(x, dp=5):
            num, = (10 ** dp),
            return round(x * num) / num
    TextComponent beginInst1
      disabled = True
      letterHeight = 0.025
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = height
      wrapWidth = 0.98
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      text:
        Instructions:

        There will be 8 boxes on the screen. Some will contain a fruit, some will be empty (contain a red "X"). At the start of each trial, the positions of all the fruits will be revealed for a short period of time before being hidden.

        You may then click/tap on any of the boxes to show its contents. The contents will be visible for some time, during which you may not click/tap on that box again, but you may click/tap on other boxes. Selecting a box with a fruit will remove the fruit from the box, making it empty.

        Find all the fruits as fast as you can while avoiding the empty boxes. The fruits will appear at the top of the screen as you find them. Once all are found, drag each fruit back into their original boxes to complete the trial.

        There will be 1 practice trial, followed by 6 trials.

        Whenever you are ready, click/tap on 'continue' and the next trial will begin immediately (same applies for the following trials).
    TextComponent beginInst2
      disabled = True
      letterHeight = 0.025
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = height
      wrapWidth = 0.98
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      text:
        Instructions:

        There will be 8 boxes on the screen. Some will contain a fruit, some will be empty.

        At the start of each trial, the positions of all the fruits will be revealed for a short period of time. The fruits will then appear above the boxes.

        You may then click and drag each fruit back into their original boxes to complete the trial.

        There will be 1 practice trial, followed by 10 trials.

        Whenever you are ready, click/tap on 'continue' and the next trial will begin.
    TextComponent begin_inst_3
      letterHeight = 0.05
      pos = (0, 0.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        1st Practice!
        Remember the place of the fruit!
    TextComponent begin_text
      letterHeight = 0.02
      pos = (0.6, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine gate
    CodeComponent gate_code
      Code Type = Auto->JS
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      Begin Routine:
        thisExp.addData("expVersion", expVersion)

        within_reveal_time = True

        objs = []
        correct_choices = []
        for i in range(N_BOXES):
            boxes[i].autoDraw = True
            objs.append(None)
            correct_choices.append(None)

        if RANDOMIZE_POSITIONS:
            box_idxs = range(N_BOXES)
            shuffle(box_idxs)
            idxs = box_idxs
        else:
            idxs = [pos1, pos2, pos3, pos4, pos5, pos6]
        idxs = idxs[:n_fruits]

        if RANDOMIZE_FRUITS:
            shuffle(fruit_basket)


        for i in range(n_fruits):
            objs[idxs[i]] = fruit_basket[i]
            objs[idxs[i]].pos = BOXES_XY[idxs[i]]
            correct_choices[idxs[i]] = fruit_basket[i].name
            if trial_name == "Practice trial":
                #show object directly
                objs[idxs[i]].autoDraw = True

        found_fruits = []

        if trial_name == "Practice trial":
            NEXT.opacity = 0.1
            NEXT.autoDraw = True

        if USE_AUDIO:
            if trial_name == "Practice trial":
                #aud_file = f"{AUD_DIR}/8 boxes Slide 3.m4a"
                aud_file = f"{AUD_DIR}/8 boxes Slide 3_Trimmed.m4a"
            else:
                aud_file = f"{AUD_DIR}/8 boxes Trials 1-8 Recall.m4a"
            SOUND = make_sound("slide3", aud_file)
            SOUND_DUR = SOUND.getDuration()
            SOUND.play()
      Each Frame:
        if trial_name != "Practice trial" and t >= SOUND_DUR:
            #show object after sound play completed
            for i in range(n_fruits):
                objs[idxs[i]] = fruit_basket[i]
                objs[idxs[i]].autoDraw = True

        disappear_time_point = reveal_seconds
        if trial_name != "Practice trial":
            disappear_time_point = SOUND_DUR + reveal_seconds

        if within_reveal_time and t > disappear_time_point:
            within_reveal_time = False
            NEXT.opacity = 1

            for obj in objs:
                if obj is not None:
                    obj.autoDraw = False

            if SKIP_PART_1:
                for obj in objs:
                    if obj is not None:
                        found_fruits.append(obj)
                fruit_pos = ABOVE_BOXES_XY
                found_count = 0
                # UPDATE: The order needs to be shuffled
                shuffle(found_fruits)
                for found_fruit in found_fruits:
                    found_fruit.pos = fruit_pos[found_count]
                    found_fruit.autoDraw = True
                    found_count += 1

            if trial_name != "Practice trial":
                continueRoutine = False

        if not within_reveal_time:
            MOUSE_L = MOUSE.getPressed()[0]
            if MOUSE_L_prev != MOUSE_L:
                MOUSE_L_prev = MOUSE_L
                if MOUSE_L and NEXT.contains(MOUSE):
                    continueRoutine = False

        if SHOW_DEBUG:
            gate_text.text = f"""
        SOUND_DUR = {round(SOUND_DUR, 3)}
        t = {round(t, 3)}
        """
      End Routine:
        NEXT.autoDraw = False

        if USE_AUDIO and trial_name == "Practice trial":
            SOUND.stop()
    TextComponent gate_title
      letterHeight = 0.05
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $trial_name
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    TextComponent gate_text
      letterHeight = 0.02
      pos = (0.6, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine begin2
    CodeComponent begin2_code
      Code Type = Auto->JS
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      Begin Routine:
        NEXT.autoDraw = True

        if USE_AUDIO:
            aud_file = f"{AUD_DIR}/8 boxes Slide 2.m4a"
            SOUND = make_sound("slide2", aud_file)
            SOUND_DUR = SOUND.getDuration()
            SOUND.play()

        # Animation loop:
        # - 0.5 sec for fruit 1
        # - 1.0 sec for fruit 2
        # - 0.5 sec delay
        N_FRAMES = int(1 / frameDur)
        HN_FRAMES = int(N_FRAMES / 2)

        fruit1_start = ABOVE_BOXES_XY[0]
        fruit1_end = fruit1.pos
        fruit2_start = ABOVE_BOXES_XY[1]
        fruit2_end = fruit2.pos

        # Define fruits' positions at each point in cycle
        xx1 = []
        yy1 = []
        xx2 = []
        yy2 = []
        for i in range(HN_FRAMES):
            xx1.append(fruit1_start[0] + (fruit1_end[0] - fruit1_start[0]) / HN_FRAMES * i)
            yy1.append(fruit1_start[1] + (fruit1_end[1] - fruit1_start[1]) / HN_FRAMES * i)
            xx2.append(fruit2_start[0])
            yy2.append(fruit2_start[1])
        for i in range(N_FRAMES):
            xx1.append(fruit1_end[0])
            yy1.append(fruit1_end[1])
            xx2.append(fruit2_start[0] + (fruit2_end[0] - fruit2_start[0]) / N_FRAMES * i)
            yy2.append(fruit2_start[1] + (fruit2_end[1] - fruit2_start[1]) / N_FRAMES * i)
        for i in range(HN_FRAMES):
            xx1.append(fruit1_end[0])
            yy1.append(fruit1_end[1])
            xx2.append(fruit2_end[0])
            yy2.append(fruit2_end[1])

        idx = 0
      Each Frame:
        # Move fruits during cycle
        idx = frameN % (2 * HN_FRAMES + N_FRAMES)
        fruit1.pos = (xx1[idx], yy1[idx])
        fruit2.pos = (xx2[idx], yy2[idx])

        MOUSE_L = MOUSE.getPressed()[0]
        if MOUSE_L_prev != MOUSE_L:
            MOUSE_L_prev = MOUSE_L
            if MOUSE_L and NEXT.contains(MOUSE):
                continueRoutine = False

        if SHOW_DEBUG:
            begin2_text.text = f"""
        SOUND_DUR = {round(SOUND_DUR, 3)}
        t = {round(t, 3)}
        """
      End Routine:
        NEXT.autoDraw = False

        # Hide fruits after cycle
        fruit1.autoDraw = False
        fruit2.autoDraw = False

        if USE_AUDIO:
            SOUND.stop()
    TextComponent begin2_inst
      letterHeight = 0.05
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Put the fruits back in their original boxes!
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    TextComponent begin2_text
      letterHeight = 0.02
      pos = (0.6, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
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Flow
  Routine begin
  Routine begin2
  LoopInitiator trials loopType="TrialHandler"
    Selected rows = $selected_rows
    conditionsFile = $SEQ_FILE
    loopType = sequential
    nReps = 1
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    Routine gate
    Routine part1
    Routine part2
  LoopTerminator trials
