PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'ID': '', 'Audio': '["Yes", "No"]', 'Debug': "['Yes', 'No']"}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['resources\\conditions_v3.csv', 'resources\\aud\\8boxes.mp3', 'resources\\imgs\\apple.png', 'resources\\imgs\\banana.png', 'resources\\imgs\\box.png', 'resources\\imgs\\cherries.png', 'resources\\imgs\\continue.png', 'resources\\imgs\\empty-box.png', 'resources\\imgs\\grapes.png', 'resources\\imgs\\orange.png', 'resources\\imgs\\pineapple.png', 'resources\\imgs\\strawberry.png', 'resources\\imgs\\watermelon.png']
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = eightBoxes_v3
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Routines
  Routine part1
    CodeComponent code1
      Code Type = Auto->JS
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      Begin Routine:
        # Part 1 is where the objects are revealed for a
        # while, then hidden, and the subject has to
        # recall where. This will be skipped for now,
        # but one thing still needs to be done here:
        # moving the object to the space above the boxes.
        # If Part 1 is becomes completely unnecessary,
        # the relevant logic can be copied over to
        # Part 2, then Part 1 can be deleted.

        found_fruits = []

        if SKIP_PART_1:
            for obj in objs:
                if obj is not None:
                    found_fruits.append(obj)
            continueRoutine = False

        OBJ_DURATION = 1.0  # Seconds
        BLANK_DURATION = OBJ_DURATION

        # Initialize some containers
        visible = []
        visible_t = []
        n_omissions = []
        n_commissions = []
        for i in range(N_BOXES):
            visible.append(False)
            visible_t.append(None)
            n_omissions.append(0)
            n_commissions.append(0)

        correct_boxes = []
        for i in range(n_fruits):
            correct_boxes.append(f"box{idxs[i] + 1}")
            correct_choices[idxs[i]] = fruit_basket[i].name
        correct_boxes.sort()

        # Fill the rest with blanks
        for i in range(N_BOXES):
            if objs[i] is None:
                objs[i] = visual.ImageStim(
                    win=win,
                    name=f"blank{i + 1}",
                    image="resources/imgs/empty-box.png",
                    pos=BOXES_XY[i],
                    size=OBJ_SIZE
                )

        # Other collections
        clicked_boxes = []
        click_times = []

        # Flags
        first_click = True
        update_time_elapsed = False

        # Variables
        obj_count = 0
        task_time_start = None
        task_time_elapsed = 0.0

        highlighter = visual.ImageStim(
            win=win,
            name="highlighter",
            image="resources/imgs/box.png",
            pos=BOXES_XY[0],
            size=BOX_SIZE,
            opacity=0.5
        )
      Each Frame:
        if not SKIP_PART_1:
            if update_time_elapsed:
                task_time_elapsed = t - task_time_start

            highlighter.setSize((0, 0), log=False)
            for i in range(N_BOXES):
                # Skip those currently visible
                if visible[i]:
                    continue
                if mouse1.isPressedIn(boxes[i]):
                    # Start timer on first click
                    if first_click:
                        task_time_start = t
                        update_time_elapsed = True
                        first_click = False
                    # Determine category of selection
                    if "blank" not in objs[i].name:
                        obj_count += 1
                        if obj_count >= n_fruits:
                            update_time_elapsed = False
                    elif "_blank" in objs[i].name:
                        n_commissions[i] += 1
                    else:
                        n_omissions[i] += 1
                    # Record selection
                    clicked_boxes.append(boxes[i].name)
                    click_times.append(task_time_elapsed)
                    # Make selection visible
                    objs[i].setAutoDraw(True, log=False)
                    visible[i] = True
                    visible_t[i] = t
                    break
                # On-mouseover effect
                elif boxes[i].contains(mouse1):
                    highlighter.setPos(boxes[i].pos, log=False)
                    highlighter.setSize(BOX_SIZE, log=False)
                    highlighter.draw()
                    break

            for i in range(N_BOXES):
                # Determine when to stop showing picture
                if visible[i] and t - visible_t[i] >= OBJ_DURATION:
                    objs[i].setAutoDraw(False, log=False)
                    if "blank" not in objs[i].name:
                        found_fruits.append(objs[i])
                        # Replace picture with blank
                        objs[i] = visual.ImageStim(
                            win=win,
                            name=f"{objs[i].name}_blank",
                            image="imgs/empty-box.png",
                            pos=BOXES_XY[i],
                            size=OBJ_SIZE
                        )
                    visible[i] = False

            # Determine if the trial is completed
            if obj_count >= n_fruits and sum(visible) <= 0:
                # Immediately proceed to Part 2
                continueRoutine = False
      End Routine:
        fruit_pos = ABOVE_BOXES_XY
        found_count = 0

        # UPDATE: The order needs to be shuffled
        shuffle(found_fruits)
        for found_fruit in found_fruits:
            found_fruit.pos = fruit_pos[found_count]
            found_fruit.autoDraw = True
            found_count += 1

        if not SKIP_PART_1:
            thisExp.addData("clicked_boxes", clicked_boxes)
            thisExp.addData("click_times", click_times)
            thisExp.addData("time_taken_sec", click_times.pop())
            thisExp.addData("correct_boxes", correct_boxes)

            thisExp.addData("omission_errors", n_omissions)
            thisExp.addData("commission_errors", n_commissions)

            total_errors = sum(n_omissions) + sum(n_commissions)

            thisExp.addData("total_errors", total_errors)

            highlighter.size = (0, 0)
    TextComponent text1
      letterHeight = 0.05
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Find the fruits
      units = height
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    MouseComponent mouse1
      forceEndRoutineOnPress = never
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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  Routine part2
    CodeComponent code2
      Code Type = Auto->JS
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      Begin Routine:
        DRAGGING = False
        clicked_obj = None

        fruits_left = n_fruits

        first_click = True
        first_click_time = 0

        choices = []
        for i in range(N_BOXES):
            choices.append(None)

        # Mouse tracking
        x = 0
        y = 0
        coords_x = []
        coords_y = []
        coords_t = []
      Each Frame:
        if fruits_left > 0:
            time_since_start = t
            time_since_first_click = 0 if first_click else t - first_click_time

        if SHOW_DEBUG:
            debug2.text = f"""
        time_since_start = {round(time_since_start, 3)}
        time_since_first_click = {round(time_since_first_click, 3)}
        fruits_left = {fruits_left}
        choices = {choices}
        """

        cont2.size = CONT_BUTTON_SIZE if fruits_left < 1 else (0, 0)

        if not DRAGGING:
            for found_fruit in found_fruits:
                if mouse2.isPressedIn(found_fruit):
                    if first_click:
                        first_click_time = t
                        first_click = False
                    clicked_obj = found_fruit
                    for i in range(N_BOXES):
                        if choices[i] == clicked_obj.name:
                            choices[i] = None
                            fruits_left += 1
                            break
                    DRAGGING = True

        if mouse2.getPressed()[0] == 1:
            if DRAGGING:
                clicked_obj.pos = mouse2.getPos()
                # Mouse tracking
                x, y = clicked_obj.pos
                if len(coords_x) == 0 or dist_sq(coords_x[-1], coords_y[-1], x, y) > MIN_DIST_SQ:
                    coords_x.append(round_dp(x))
                    coords_y.append(round_dp(y))
                    coords_t.append(round_dp(t))
        else:
            DRAGGING = False
            if clicked_obj is not None:
                for i in range(N_BOXES):
                    if snapped(clicked_obj, boxes[i]):
                        choices[i] = clicked_obj.name
                        fruits_left -= 1
                        clicked_obj = None
                        break
      End Routine:
        thisExp.addData("time_since_start", time_since_start)
        thisExp.addData("time_since_first_click", time_since_first_click)

        # Mouse tracking
        thisExp.addData("coords_x", coords_x)
        thisExp.addData("coords_y", coords_y)
        thisExp.addData("coords_t", coords_t)

        thisExp.addData("choices", choices)
        thisExp.addData("correct_choices", correct_choices)

        errors = 0
        for i in range(N_BOXES):
            if choices[i] != correct_choices[i]:
                errors += 1

        thisExp.addData("errors", errors)

        for found_fruit in found_fruits:
            found_fruit.autoDraw = False

        # Record timestamp and total time
        thisExp.addData("end_timestamp", util.MonotonicClock.getDateStr())
        thisExp.addData("total_seconds", globalClock.getTime())
    TextComponent text2
      letterHeight = 0.05
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Put the fruits back in their original boxes
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    MouseComponent mouse2
      clickable = cont2
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    ImageComponent cont2
      image = resources/imgs/continue.png
      pos = (0, -0.4)
      saveStartStop = False
      size = (0, 0)
      startVal [time (s)] = 0.0
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    TextComponent debug2
      letterHeight = 0.02
      pos = (0.6, 0.37)
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine begin
    CodeComponent beginCode
      Code Type = Auto->JS
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      Begin Experiment:
        expVersion = "2022.09.06"

        SHOW_DEBUG = expInfo["Debug"] == "Yes"
        USE_AUDIO = expInfo["Audio"] == "Yes"

        SKIP_PART_1 = True
        RANDOMIZE_FRUITS = True
        RANDOMIZE_POSITIONS = False

        MIN_DIST_SQ = 0.005 * 0.005  # Mouse tracking

        IMG_NAMES = (
            "apple",
            "banana",
            "cherries",
            "grapes",
            "orange",
        #    "pineapple",  # very distorted, have to use non-square sizes
            "strawberry",
            "watermelon",
        )

        #N_FRUITS = 7
        N_FRUITS = len(IMG_NAMES)
        N_BOXES = 8
        NCOL = 4

        # Lengths (% screen height) ----------------------

        BOX_SIZE = (0.2, 0.2)
        OBJ_SIZE = (0.16, 0.16)
        CONT_BUTTON_SIZE = (0.32, 0.112)

        ABOVE_BOXES_X0 = -0.4
        ABOVE_BOXES_Y0 = 0.2
        ABOVE_BOXES_XY = []
        for i in range(N_FRUITS):
            ABOVE_BOXES_XY.append((
                ABOVE_BOXES_X0 + i * OBJ_SIZE[1],
                ABOVE_BOXES_Y0
            ))

        BOXES_X0 = -0.3
        BOXES_Y0 = 0
        BOXES_XY = []
        for i in range(N_BOXES):
            BOXES_XY.append((
                BOXES_X0 + (i % NCOL) * BOX_SIZE[0],
                BOXES_Y0 - int(i / NCOL) * BOX_SIZE[1]
            ))

        # Boxes ------------------------------------------

        boxes = []
        for i in range(N_BOXES):
            boxes.append(visual.ImageStim(
                win=win,
                name=f"box{i + 1}",
                image="resources/imgs/box.png",
                pos=BOXES_XY[i],
                size=BOX_SIZE,
                opacity=0.5
            ))

        # Objects (fruits) -------------------------------

        fruit_basket = []
        for i in range(N_FRUITS):
            fruit_basket.append(visual.ImageStim(
                win=win,
                name=IMG_NAMES[i],
                image=f"resources/imgs/{IMG_NAMES[i]}.png",
                pos=(0, 0),
                size=OBJ_SIZE
            ))
      Begin Routine:
        for i in range(N_BOXES):
            boxes[i].autoDraw = True

        fruit1 = fruit_basket[0]
        fruit1.pos = BOXES_XY[0]
        fruit1.autoDraw = True
        fruit2 = fruit_basket[1]
        fruit2.pos = BOXES_XY[7]
        fruit2.autoDraw = True

        if USE_AUDIO:
            beginSound = sound.Sound(
                win=win,
                value="resources/aud/8boxes.mp3",
                secs=-1,
                stereo=True,
                hamming=True,
                name="beginSound"
            )
            beginSound.setVolume(1.0)
            beginSound.play()
      Each Frame:
        if USE_AUDIO and t > 12.5:
            continueRoutine = False

        if SHOW_DEBUG:
            beginDebug.text = f"""
        util.MonotonicClock.getDateStr() = {util.MonotonicClock.getDateStr()}
        t = {round(t, 3)}
        """
    CodeComponent functions
      Code Type = Auto->JS
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      Before Experiment:
        def within_box(obj, box):
            """
            Determine if object is within box
            - Squared difference in x (and y) coordinates
            should be less than the square of half the
            box width (and height)
            - That would mean the center of the object is
            within the box boundaries
            """
            obj_x, obj_y = obj.pos
            box_x, box_y = box.pos
            box_w, box_h = box.size
            dx, dy = obj_x - box_x, obj_y - box_y
            hw, hh = box_w / 2, box_h / 2
            return dx * dx < hw * hw and dy * dy < hh * hh

        def snapped(obj1, obj2, func=within_box):
            """
            Determine if obj1 snapped to center of obj2
            - Check if obj1 is 'near' obj2, based on func
            - If yes, set the obj1's position to be
            equal to obj2's position and return True
            - Otherwise, do nothing and return False
            """
            if func(obj1, obj2):
                obj1.pos = obj2.pos
                return True
            return False

        def dist_sq(x1, y1, x2, y2):
            dx, dy = x2 - x1, y2 - y1
            return (dx * dx) + (dy * dy)

        def round_dp(x, dp=5):
            num, = (10 ** dp),
            return round(x * num) / num
    TextComponent beginInst1
      disabled = True
      letterHeight = 0.025
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = height
      wrapWidth = 0.98
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      text:
        Instructions:

        There will be 8 boxes on the screen. Some will contain a fruit, some will be empty (contain a red "X"). At the start of each trial, the positions of all the fruits will be revealed for a short period of time before being hidden.

        You may then click/tap on any of the boxes to show its contents. The contents will be visible for some time, during which you may not click/tap on that box again, but you may click/tap on other boxes. Selecting a box with a fruit will remove the fruit from the box, making it empty.

        Find all the fruits as fast as you can while avoiding the empty boxes. The fruits will appear at the top of the screen as you find them. Once all are found, drag each fruit back into their original boxes to complete the trial.

        There will be 1 practice trial, followed by 6 trials.

        Whenever you are ready, click/tap on 'continue' and the next trial will begin immediately (same applies for the following trials).
    TextComponent beginInst2
      disabled = True
      letterHeight = 0.025
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = height
      wrapWidth = 0.98
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      text:
        Instructions:

        There will be 8 boxes on the screen. Some will contain a fruit, some will be empty.

        At the start of each trial, the positions of all the fruits will be revealed for a short period of time. The fruits will then appear above the boxes.

        You may then click and drag each fruit back into their original boxes to complete the trial.

        There will be 1 practice trial, followed by 10 trials.

        Whenever you are ready, click/tap on 'continue' and the next trial will begin.
    TextComponent beginInst3
      letterHeight = 0.05
      pos = (0, 0.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        1st Practice!
        Remember the place of the fruit!
    ImageComponent beginCont
      image = resources/imgs/continue.png
      pos = (0, -0.4)
      saveStartStop = False
      size = (0.32, 0.112)
      startVal [time (s)] = 0.0
      units = height
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    MouseComponent beginMouse
      clickable = beginCont
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent beginDebug
      letterHeight = 0.02
      pos = (0.6, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine gate
    CodeComponent gateCode
      Code Type = Auto->JS
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      Begin Routine:
        thisExp.addData("expVersion", expVersion)

        objs = []
        correct_choices = []
        for i in range(N_BOXES):
            boxes[i].autoDraw = True
            objs.append(None)
            correct_choices.append(None)

        if RANDOMIZE_POSITIONS:
            box_idxs = range(N_BOXES)
            shuffle(box_idxs)
            idxs = box_idxs
        else:
            idxs = [pos1, pos2, pos3, pos4, pos5, pos6]
        idxs = idxs[:n_fruits]

        if RANDOMIZE_FRUITS:
            shuffle(fruit_basket)

        for i in range(n_fruits):
            objs[idxs[i]] = fruit_basket[i]
            objs[idxs[i]].pos = BOXES_XY[idxs[i]]
            correct_choices[idxs[i]] = fruit_basket[i].name
            objs[idxs[i]].autoDraw = True
      End Routine:
        for obj in objs:
            if obj is not None:
                obj.autoDraw = False
    TextComponent gateText
      letterHeight = 0.05
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $reveal_seconds
      text [set every repeat] = $trial_name
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  Routine begin2
    CodeComponent begin2Code
      Code Type = Auto->JS
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      Begin Routine:
        # Animation loop:
        # - 0.5 sec for fruit 1
        # - 1.0 sec for fruit 2
        # - 0.5 sec delay
        N_FRAMES = int(1 / frameDur)
        HN_FRAMES = int(N_FRAMES / 2)

        fruit1_start = ABOVE_BOXES_XY[0]
        fruit1_end = fruit1.pos
        fruit2_start = ABOVE_BOXES_XY[1]
        fruit2_end = fruit2.pos

        # Define fruits' positions at each point in cycle
        xx1 = []
        yy1 = []
        xx2 = []
        yy2 = []
        for i in range(HN_FRAMES):
            xx1.append(fruit1_start[0] + (fruit1_end[0] - fruit1_start[0]) / HN_FRAMES * i)
            yy1.append(fruit1_start[1] + (fruit1_end[1] - fruit1_start[1]) / HN_FRAMES * i)
            xx2.append(fruit2_start[0])
            yy2.append(fruit2_start[1])
        for i in range(N_FRAMES):
            xx1.append(fruit1_end[0])
            yy1.append(fruit1_end[1])
            xx2.append(fruit2_start[0] + (fruit2_end[0] - fruit2_start[0]) / N_FRAMES * i)
            yy2.append(fruit2_start[1] + (fruit2_end[1] - fruit2_start[1]) / N_FRAMES * i)
        for i in range(HN_FRAMES):
            xx1.append(fruit1_end[0])
            yy1.append(fruit1_end[1])
            xx2.append(fruit2_end[0])
            yy2.append(fruit2_end[1])

        idx = 0
      Each Frame:
        # Move fruits during cycle
        idx = frameN % (2 * HN_FRAMES + N_FRAMES)
        fruit1.pos = (xx1[idx], yy1[idx])
        fruit2.pos = (xx2[idx], yy2[idx])
      End Routine:
        # Hide fruits after cycle
        fruit1.autoDraw = False
        fruit2.autoDraw = False

        if USE_AUDIO:
            beginSound.stop()
    TextComponent begin2Inst
      letterHeight = 0.05
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Put the fruits back in their original boxes!
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    ImageComponent begin2Cont
      image = resources/imgs/continue.png
      pos = (0, -0.4)
      saveStartStop = False
      size = (0.32, 0.112)
      startVal [time (s)] = 0.0
      units = height
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    MouseComponent begin2Mouse
      clickable = beginCont
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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Flow
  Routine begin
  Routine begin2
  LoopInitiator trials loopType="TrialHandler"
    Selected rows = 0:
    conditionsFile = resources\conditions_v3.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('trial_name', 'Practice trial'), ('reveal_seconds', 4), ('n_fruits', 2), ('pos1', 0), ('pos2', 6), ('pos3', None), ('pos4', None), ('pos5', None), ('pos6', None)]),
      OrderedDict([('trial_name', 'Trial 1'), ('reveal_seconds', 3), ('n_fruits', 2), ('pos1', 3), ('pos2', 5), ('pos3', None), ('pos4', None), ('pos5', None), ('pos6', None)]),
      OrderedDict([('trial_name', 'Trial 2'), ('reveal_seconds', 3), ('n_fruits', 2), ('pos1', 4), ('pos2', 7), ('pos3', None), ('pos4', None), ('pos5', None), ('pos6', None)]),
      OrderedDict([('trial_name', 'Trial 3'), ('reveal_seconds', 3), ('n_fruits', 2), ('pos1', 2), ('pos2', 4), ('pos3', None), ('pos4', None), ('pos5', None), ('pos6', None)]),
      OrderedDict([('trial_name', 'Trial 4'), ('reveal_seconds', 3), ('n_fruits', 3), ('pos1', 0), ('pos2', 3), ('pos3', 6.0), ('pos4', None), ('pos5', None), ('pos6', None)]),
      OrderedDict([('trial_name', 'Trial 5'), ('reveal_seconds', 3), ('n_fruits', 3), ('pos1', 1), ('pos2', 4), ('pos3', 6.0), ('pos4', None), ('pos5', None), ('pos6', None)]),
      OrderedDict([('trial_name', 'Trial 6'), ('reveal_seconds', 3), ('n_fruits', 3), ('pos1', 3), ('pos2', 5), ('pos3', 7.0), ('pos4', None), ('pos5', None), ('pos6', None)]),
      OrderedDict([('trial_name', 'Trial 7'), ('reveal_seconds', 3), ('n_fruits', 4), ('pos1', 1), ('pos2', 4), ('pos3', 6.0), ('pos4', 7.0), ('pos5', None), ('pos6', None)])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
    Routine gate
    Routine part1
    Routine part2
  LoopTerminator trials
